CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '—', 'Load the images by matching files in the folder against the unique text pattern ‘TIF’.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "AS_09047_")
    Name to assign these images:OrigGreen
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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notes:['Perform illumination correction using All images, the Regular method and a small median filter.']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
    Select the input image:OrigGreen
    Name the output image:SuboptimalIllumGreen
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: First cycle
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:12
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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notes:['Apply the illumination function to the original image and examine the result. In this case, the intensity variations reflect the cells more than the illumination, so this function is undesireable.']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
    Select the input image:SuboptimalIllumGreen
    Name the output image:SuboptimalCorrGreen
    Select the illumination function:SuboptimalIllumGreen
    Select how the illumination function is applied:Divide

CorrectIlluminationCalculate:[module_num:7|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notes:['This time, perform illumination correction using All images, the Regular method and a larger median filter.']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
    Select the input image:OrigGreen
    Name the output image:OptimalIllumGreen
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: First cycle
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:125
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:8|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notes:['Apply the illumination function to the original image and examine the result. This time, the intensity variations in the illumination function have been smoothed out, producing a better result.']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
    Select the input image:OrigGreen
    Name the output image:OptimalCorrGreen
    Select the illumination function:OptimalIllumGreen
    Select how the illumination function is applied:Divide

SaveImages:[module_num:9|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notes:['You can save the final illumination function to a file for later use in an analysis pipeline.']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
    Select the type of image to save:Image
    Select the image to save:OptimalIllumGreen
    Select method for constructing file names:Single name
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    Enter single file name:Illum
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:First cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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