CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D:No
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    Select the rule criteria:and (file does contain "d0.tif")
    Name to assign these images:OrigBlue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d1.tif")
    Name to assign these images:OrigGreen
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Input:OrigBlue
    Object:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):8,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifyPrimaryObjects:[module_num:6|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
    Input:OrigGreen
    Object:PH3
    Typical diameter of objects, in pixel units (Min,Max):5,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
RelateObjects:[module_num:7|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
    Parent objects:Nuclei
    Child objects:PH3
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
MeasureObjectIntensity:[module_num:8|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
    Hidden:2
    Select an image to measure:OrigGreen
    Select an image to measure:OrigBlue
    Select objects to measure:Nuclei

FilterObjects:[module_num:9|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
    Input:Nuclei
    Object:PH3PosNuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Children_PH3_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
DisplayDataOnImage:[module_num:10|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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Intensity_MedianIntensity_OrigGreen
    Select the image on which to display the measurements:OrigGreen
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
CalculateMath:[module_num:11|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enabled:False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
    Name the output measurement:PercentPositive
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_PH3PosNuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Count_Nuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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