CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

LoadImages:[module_num:1|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notes:['Specify what your bright-field images are called. In this case, ‘Text-Regular expressions’ is used to limit the data to wells C01-C24 of w2.  Also specify any additional image channels, e.g., where you have a fluorescence signal (in this case, denoted with ‘w1’). This sample includes two brightfield and two fluorescence images. More data is available through the BBBC (http://www.broadinstitute.org/bbbc/).']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
    File type to be loaded:individual images
    File selection method:Text-Regular expressions
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder|Bioimaging/SamplePipelineUntangle
    Check image sets for unmatched or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:2
    Text that these images have in common (case-sensitive):_C[0-2][0-9]_w2
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:BrightFieldImage
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    Rescale intensities?:No
    Text that these images have in common (case-sensitive):_C[0-2][0-9]_w1
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:Sytox
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    Rescale intensities?:Yes

CorrectIlluminationCalculate:[module_num:2|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notes:['Brightfield images of worms in wells, where the brightest part of the image is in its center, are often successfully corrected using the Convex Hull approach. No need to adjust parameters.']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
    Select the input image:BrightFieldImage
    Name the output image:Background
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Convex Hull
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:3|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notes:['Remove the background variation by division. No need to change parameters.']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
    Select the input image:BrightFieldImage
    Name the output image:IlluminationCorrectedBF
    Select the illumination function:Background
    Select how the illumination function is applied:Divide

ImageMath:[module_num:4|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notes:['Invert the corrected image to make worms bright (foreground) and the background dark.']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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Worms
    Image or measurement?:Image
    Select the first image:IlluminationCorrectedBF
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Threshold:[module_num:5|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notes:['Optional: The ApplyThreshold and following Morph and Crop modules are only needed if you have problems with shadows close to the well edge. Define the well edge by thresholding the illumination correction function.']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
    Select the input image:Background
    Name the output image:WellEdge
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
Erosion:[module_num:6|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notes:['Shrink the well edge by morphological erosion to exclude regions close to the well edge which can cause artifacts.']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
    Select the input image:WellEdge
    Name the output image:ErodedWellEdge
    Structuring element:disk,5

Crop:[module_num:7|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notes:['Cut out (crop) the region within the eroded well edge and continue analysis on this cropped image.']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
    Select the input image:Worms
    Name the output image:WormsCropped
    Select the cropping shape:Image
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    Remove empty rows and columns?:No
    Select the masking image:ErodedWellEdge
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
IdentifyPrimaryObjects:[module_num:8|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notes:['In this step, the goal is to identify all worm-objects both single, touching, crossing and clustered worms. The ‘Typical diameter of objects’ is the diameter of a disc with the same area as the object. Adjust this so that small debrisis excluded, and set the max to a high number. If worms are poorly defined over the image background, adjust the thresholding method. It is preferable to use the same thresholding setting here as was used during worm model training as the threshold can affect the size of the worms, making the model less representative of the data set.']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
    Select the input image:WormsCropped
    Name the primary objects to be identified:WormObjects
    Typical diameter of objects, in pixel units (Min,Max):15,60000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
ConvertObjectsToImage:[module_num:9|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notes:['This module simply converts the selected object into a binary image before using it for untangling.']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
    Select the input objects:WormObjects
    Name the output image:WormObjectsBinary
    Select the color format:Binary (black & white)
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
UntangleWorms:[module_num:10|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notes:['In this module, make sure you select the training set you created previously using the module for model training. For this example, we use a pre-constructed model trained on 24 images with a total of >60 worms, with image data from the BBBC. Check ‘Retain outlines’ to display outlines on top of the original image for visual evaluation. Adjust the training set weights and/or the .xml file of the training set if untangling is not satisfactory. Read the help-file for the module for more information. ']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
    Select the input binary image:WormObjectsBinary
    Overlap style:Both
    Name the output overlapping worm objects:OverlappingWorms
    Name the output non-overlapping worm objects:NonOverlappingWorms
    Training set file location:Default Input Folder|Bioimaging/SamplePipelineUntangle
    Training set file name:MyWormModel_B01_B24.xml
    Use training set weights?:Yes
    Overlap weight:5.0
    Leftover weight:10.0
    Retain outlines of the overlapping objects?:Yes
    Outline colormap?:Default
    Name the overlapped outline image:OverlappedWormOutlines
    Retain outlines of the non-overlapping worms?:No
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    Train or untangle worms?:Untangle
    Minimum area percentile:1.0
    Minimum area factor:0.85
    Maximum area percentile:90.0
    Maximum area factor:1.0
    Minimum length percentile:1.0
    Minimum length factor:0.9
    Maximum length percentile:99.0
    Maximum length factor:1.1
    Maximum cost percentile:90.0
    Maximum cost factor:1.9
    Number of control points:21
    Maximum radius percentile:90.0
    Maximum radius factor:1.0
    Maximum complexity:Process all clusters
    Custom complexity:400

OverlayOutlines:[module_num:11|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notes:['Optional: This module is only for visual examination of the untangling result.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:BrightFieldImage
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:OverlappingWorms

SaveImages:[module_num:12|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notes:['This module saves the result of the untangling overlaid on the original image, allowing visual verification of the result.']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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:BrightFieldImage
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:outlines
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectSizeShape:[module_num:13|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notes:['When measuring size and shape, use the ‘OverlappingWorms’ object, which treats even overlapping worms as distinct objects. The Zernike features takes a while to calculate, so we exclude them here.']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
    Select objects to measure:OverlappingWorms
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:14|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notes:['For intensity measurements, specify the objects to measure and the images from which measurements should be made. When measuring intensities, results may be more accurate if overlapping regions are excluded. Therefore, chose ‘NonOverlappingWorms’ as the input object. Select the fluorescent ‘Sytox’ image for intensity measurements. For some phenotypes, the bright-field image may also provide informative intensity measurements.']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
    Hidden:1
    Select an image to measure:Sytox
    Select objects to measure:NonOverlappingWorms

ExportToSpreadsheet:[module_num:15|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notes:['This module exports measurements to a spreadsheet. You may chose to export all measurements, or limit measurements to those of interest, as shown below. The created csv files include measurements on a per-worm basis, and can be opened in a text editor or any spreadsheet program such as Excel.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in older Excel versions?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|FileName_BrightFieldImage,OverlappingWorms|Location_Center_Y,OverlappingWorms|Location_Center_X,OverlappingWorms|AreaShape_FormFactor,OverlappingWorms|AreaShape_Center_Y,OverlappingWorms|AreaShape_Center_Z,OverlappingWorms|AreaShape_Center_X,OverlappingWorms|AreaShape_Area,OverlappingWorms|AreaShape_MajorAxisLength,NonOverlappingWorms|Intensity_StdIntensity_Sytox,NonOverlappingWorms|Intensity_MeanIntensity_Sytox,NonOverlappingWorms|Intensity_IntegratedIntensity_Sytox
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:OverlappingWorms
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:NonOverlappingWorms
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
